PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'ID': '', 'Audio': "['Yes', 'No']", 'Debug': "['Yes', 'No']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources\\seqs\\conditions.csv', 'resources\\aud\\BEPS Instructions.m4a', 'resources\\aud\\BEPS Q01.m4a', 'resources\\aud\\BEPS Q02.m4a', 'resources\\aud\\BEPS Q03.m4a', 'resources\\aud\\BEPS Q04.m4a', 'resources\\aud\\BEPS Q04a.m4a', 'resources\\aud\\BEPS Q05.m4a', 'resources\\aud\\BEPS Q06.m4a', 'resources\\aud\\BEPS Q07.m4a', 'resources\\aud\\BEPS Q08.m4a', 'resources\\aud\\PAMS Q01.m4a', 'resources\\aud\\PAMS Q02.m4a', 'resources\\aud\\PAMS Q03.m4a', 'resources\\aud\\PAMS Q04.m4a', 'resources\\aud\\PAMS Q05.m4a', 'resources\\aud\\PAMS Q06.m4a', 'resources\\aud\\PAMS Q07.m4a', 'resources\\aud\\PAMS Q08.m4a', 'resources\\aud\\PAMS Q09.m4a', 'resources\\aud\\PAMS Q10.m4a', 'resources\\aud\\PAMS Q11.m4a', 'resources\\aud\\PAMS Q12.m4a', 'resources\\aud\\PAMS Q13.m4a', 'resources\\aud\\PAMS Q14.m4a', 'resources\\aud\\PAMS Q15.m4a', 'resources\\imgs\\slides\\slide-02.png', 'resources\\imgs\\slides\\slide-03.png', 'resources\\imgs\\slides\\slide-04.png', 'resources\\imgs\\slides\\slide-05.png', 'resources\\imgs\\slides\\slide-06.png', 'resources\\imgs\\slides\\slide-07.png', 'resources\\imgs\\slides\\slide-09.png', 'resources\\imgs\\slides\\slide-10.png', 'resources\\imgs\\slides\\slide-11.png', 'resources\\imgs\\slides\\slide-12.png', 'resources\\imgs\\slides\\slide-13.png', 'resources\\imgs\\slides\\slide-14.png', 'resources\\imgs\\slides\\slide-15.png', 'resources\\imgs\\slides\\slide-16.png', 'resources\\imgs\\slides\\slide-17.png', 'resources\\imgs\\slides\\slide-18.png', 'resources\\imgs\\slides\\slide-19.png', 'resources\\imgs\\slides\\slide-20.png', 'resources\\imgs\\slides\\slide-21.png', 'resources\\imgs\\slides\\slide-22.png', 'resources\\imgs\\slides\\slide-23.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = BEPS-PAMS
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Routines
  Routine begin
    CodeComponent begin_code
      Code Type = Auto->JS
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      Begin Experiment:
        #expInfo["Debug"] = "No"
        #expInfo["Audio"] = "Yes"

        expVersion = "2022.09.21"
        AUD_DIR = "resources/aud"
        IMGS_DIR = "resources/imgs"
        SLIDES_DIR = f"{IMGS_DIR}/slides"
        SEQ_FILE = "resources/seqs/conditions.csv"

        SHOW_DEBUG = expInfo["Debug"] == "Yes"
        USE_AUDIO = expInfo["Audio"] == "Yes"

        CLICK_BOX_OPACITY = 0.5 if SHOW_DEBUG else 0
        """
        Slides are 1052 x 745 pixels.
        Positions and sizes of clickable areas are hard
        coded, so changing this will break _everything_!

        """
        SLIDE_H = 0.7
        SLIDE_W = SLIDE_H / 745 * 1052
        SLIDE_SIZE = (SLIDE_W, SLIDE_H)

        ## "Next" button at top-right
        #NEXT_POS = (0.39, 0.265)
        #NEXT_SIZE = (0.165, 0.075)
        #NEXT = make_rect("next", NEXT_POS, NEXT_SIZE, CLICK_BOX_OPACITY)
        #
        ## "Replay" button at top-left
        #REPLAY_POS = (-0.376, 0.265)
        #REPLAY_SIZE = (0.165, 0.075)
        #REPLAY = make_rect("replay", REPLAY_POS, REPLAY_SIZE, CLICK_BOX_OPACITY)
        #
        ## For covering "Next" button
        #COVER_SIZE = (0.17, 0.08)
        #COVER = make_rect("cover", NEXT_POS, COVER_SIZE, None, "white", "white", 0)

        # Global mouse
        MOUSE = core.Mouse(win=win)
        MOUSE_L = 0
        MOUSE_L_prev = 0

        # Global sound
        SOUND = None

        # For Q04/Q04a
        previous_wrong = False

        all_cimgs = {
            "slide-02": get_5umbrellas,
            "slide-03": get_pattern1,
            "slide-04": get_pattern2,
            "slide-05": get_symmetry,
            "slide-06": get_shapes,
            "slide-07": get_cookies,
            "slide-09": get_flowers,
            "slide-10": get_yes_no,
            "slide-11": get_red_apples1,
            "slide-12": get_red_apples2,
            "slide-13": get_9or6,
            "slide-14": get_20or12,
            "slide-15": get_5or8,
            "slide-16": get_21or17,
            "slide-17": get_num_pattern,
            "slide-18": get_green_apples,
            "slide-19": get_farm,
            "slide-20": get_cows,
            "slide-21": get_2plus2,
            "slide-22": get_sweets,
            "slide-23": get_3minus1,
        }
    CodeComponent functions_g
      Code Type = Auto->JS
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      Before Experiment:
        def make_sound(name, filepath):
            return sound.Sound(
                win=win,
                value=filepath,
                secs=-1,
                stereo=True,
                hamming=True,
                name=name
            )

        def make_img(name, file_name, pos, size, opacity):
            return visual.ImageStim(
                win=win,
                name=name,
                image=file_name,
                pos=pos,
                size=size,
                opacity=opacity
            )

        def make_slide(name, pos=(0, 0), size=SLIDE_SIZE):
            return make_img(
                name,
                f"{SLIDES_DIR}/{name}.png",
                pos, size, 1
            )

        def make_rect(
            name, pos, size, opacity,
            fillColor=None,
            lineColor="green",
            lineWidth=3
        ):
            return visual.Rect(
                win=win,
                name=name,
                width=size[0],
                height=size[1],
                pos=pos,
                lineWidth=lineWidth,
                lineColor=util.Color(lineColor),
                fillColor=fillColor,
                opacity=opacity
            )

        def make_boxes(names, xys, sizes, opacity=CLICK_BOX_OPACITY):
            cimgs = []
            for i in range(len(names)):
                cimgs.append(make_rect(names[i], xys[i], sizes[i], opacity))
            return cimgs

        def make_circle(
            name, pos, size,
            fillColor="black",
            lineColor="black",
            lineWidth=3,
            opacity=1
        ):
            if lineColor is not None:
                lineColor = util.Color(lineColor)
            if fillColor is not None:
                fillColor = util.Color(fillColor)
            return visual.Polygon(
                win=win,
                name=name,
                edges=360,
                size=size,
                pos=pos,
                lineWidth=lineWidth,
                lineColor=lineColor,
                fillColor=fillColor,
                opacity=opacity
            )

        def make_radio0(name, pos):
            return make_circle(name, pos, (0.03, 0.03), None, "black")

        def make_radio1(name, pos):
            return make_circle(name, pos, (0.023, 0.023), "black", None, 0)

        def find_min_y(cimgs):
            min_y = 0.5
            for cimg in cimgs:
                y = cimg.pos[1] - (cimg.height / 2)
                if min_y > y:
                    min_y = y
            return min_y

        def make_radios(func, cimgs, res=[], offset=-0.05):
            min_y = find_min_y(cimgs)
            for cimg in cimgs:
                radio_y = min_y + offset
                res.append(func(cimg.name, (cimg.pos[0], radio_y)))
            return res
    CodeComponent specs_BEPS
      Code Type = Auto->JS
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      Begin Experiment:
        # BEPS

        def get_5umbrellas():
            # Slide 02
            names = ("orange", "white", "yellow", "black", "red")
            y0 = 0.175
            y1 = y0 - 0.35
            xys = [(-0.305, y0), (0, y0), (0.305, y0), (-0.185, y1), (0.1615, y1)]
            sizes = []
            for i in range(len(names)):
                sizes.append((0.245, 0.21))
            return make_boxes(names, xys, sizes)

        def get_pattern1():
            # Slide 03
            names = ("star", "bread", "watermelon", "pizza")
            y0 = -0.195
            xys = [(-0.335, y0), (-0.105, y0), (0.13, y0), (0.345, y0)]
            sizes = []
            for i in range(len(names)):
                sizes.append((0.14, 0.14))
            return make_boxes(names, xys, sizes)

        def get_pattern2():
            # Slide 04
            names = ("ice_cream", "basketball", "car", "beachball")
            y0 = -0.189
            xys = [(-0.351, y0 + 0.012), (-0.134, y0), (0.097, y0), (0.334, y0)]
            sizes = [(0.08, 0.205), (0.13, 0.13), (0.18, 0.1), (0.13, 0.13)]
            return make_boxes(names, xys, sizes)

        def get_symmetry():
            # Slide 05
            names = ("burger", "sun", "cloud", "tree")
            y0 = -0.135
            xys = [(-0.357, y0), (-0.118, y0), (0.128, y0 + 0.004), (0.37, y0 + 0.006)]
            sizes = [(0.185, 0.185), (0.18, 0.18), (0.22, 0.16), (0.205, 0.215)]
            return make_boxes(names, xys, sizes)

        def get_shapes():
            # Slide 06
            names = ("rectangle", "triangle", "circle", "square")
            y0 = -0.183
            xys = [(-0.328, y0 - 0.006), (-0.078, y0 + 0.002), (0.144, y0), (0.36, y0)]
            sizes = [(0.248, 0.1), (0.152, 0.132), (0.132, 0.132), (0.126, 0.126)]
            return make_boxes(names, xys, sizes)

        def get_cookies():
            # Slide 07
            names = ("cookie1", "cookie2", "cookie3", "cookie4")
            y0 = -0.146
            xys = [(-0.351, y0 +0.01), (-0.122, y0), (0.111, y0 + 0.01), (0.362, y0)]
            sizes = [(0.205, 0.205), (0.17, 0.17), (0.222, 0.22), (0.198, 0.195)]
            return make_boxes(names, xys, sizes)
    CodeComponent specs_PAMS
      Code Type = Auto->JS
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      Begin Experiment:
        # PAMS

        def get_flowers():
            # Slide 09
            names = ("flowers3", "flowers4", "flowers5", "flowers1")
            y0 = -0.133
            xys = [(-0.362, y0), (-0.119, y0 + 0.029), (0.13, y0 + 0.032), (0.367, y0 + 0.008)]
            sizes = [(0.19, 0.06), (0.13, 0.131), (0.2, 0.125), (0.082, 0.086)]
            return make_boxes(names, xys, sizes)

        def get_yes_no():
            # Slide 10
            names = ("yes", "no")
            y0 = -0.256
            xys = [(-0.284, y0), (0.292, y0)]
            sizes = [(0.262, 0.09), (0.262, 0.09)]
            return make_boxes(names, xys, sizes)

        def get_red_apples1():
            # Slide 11
            names = ("10", "12", "8", "13")
            y0 = -0.199
            xys = [(-0.374, y0 + 0.003), (-0.115, y0), (0.123, y0), (0.365, y0)]
            sizes = []
            for i in range(len(names)):
                sizes.append((0.175, 0.135))
            return make_boxes(names, xys, sizes)

        def get_red_apples2():
            # Slide 12
            names = ("7", "9", "10", "8")
            y0 = -0.199
            xys = [(-0.367, y0 + 0.003), (-0.113, y0), (0.126, y0), (0.368, y0 + 0.003)]
            sizes = [(0.165, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_9or6():
            # Slide 13
            names = ("9", "6")
            y0 = 0.021
            w0 = 0.18
            h0 = 0.27
            xys = [(-0.302, y0), (0.297, y0)]
            sizes = [(w0, h0), (w0, h0)]
            return make_boxes(names, xys, sizes)

        def get_20or12():
            # Slide 14
            names = ("20", "12")
            y0 = 0.001
            w0 = 0.33
            h0 = 0.23
            xys = [(-0.252, y0), (0.26, y0)]
            sizes = [(w0, h0), (w0, h0)]
            return make_boxes(names, xys, sizes)

        def get_5or8():
            # Slide 15
            names = ("5", "8")
            y0 = 0.021
            w0 = 0.18
            h0 = 0.27
            xys = [(-0.307, y0), (0.296, y0)]
            sizes = [(w0, h0), (w0, h0)]
            return make_boxes(names, xys, sizes)

        def get_21or17():
            # Slide 16
            names = ("21", "17")
            y0 = -0.014
            w0 = 0.32
            h0 = 0.225
            xys = [(-0.268, y0), (0.27, y0)]
            sizes = [(w0, h0), (w0, h0)]
            return make_boxes(names, xys, sizes)

        def get_num_pattern():
            # Slide 17
            names = ("12", "9", "11", "10")
            y0 = -0.199
            xys = [(-0.362, y0 + 0.003), (-0.113, y0), (0.126, y0), (0.368, y0 + 0.003)]
            sizes = [(0.153, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_green_apples():
            # Slide 18
            names = ("2", "1", "4", "3")
            y0 = -0.199
            xys = [(-0.362, y0 + 0.003), (-0.113, y0), (0.126, y0), (0.368, y0 + 0.003)]
            sizes = [(0.153, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_farm():
            # Slide 19
            names = ("2", "4", "1", "3")
            x0 = 0.002
            y0 = -0.234
            xys = [(x0 - 0.362, y0 + 0.003), (x0 - 0.113, y0), (x0 + 0.126, y0), (x0 + 0.368, y0 + 0.003)]
            sizes = [(0.153, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_cows():
            # Slide 20
            names = ("6", "4", "5", "2")
            x0 = 0.002
            y0 = -0.234
            xys = [(x0 - 0.362, y0 + 0.003), (x0 - 0.113, y0), (x0 + 0.126, y0), (x0 + 0.368, y0 + 0.003)]
            sizes = [(0.153, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_2plus2():
            # Slide 21
            names = ("3", "0", "2", "4")
            x0 = 0.002
            y0 = -0.234
            xys = [(x0 - 0.362, y0 + 0.003), (x0 - 0.113, y0), (x0 + 0.126, y0), (x0 + 0.368, y0 + 0.003)]
            sizes = [(0.153, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_sweets():
            # Slide 22
            names = ("2", "7", "5", "3")
            x0 = 0.002
            y0 = -0.234
            xys = [(x0 - 0.362, y0 + 0.003), (x0 - 0.113, y0), (x0 + 0.126, y0), (x0 + 0.368, y0 + 0.003)]
            sizes = [(0.153, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)

        def get_3minus1():
            # Slide 23
            names = ("1", "3", "2", "4")
            x0 = 0.002
            y0 = -0.234
            xys = [(x0 - 0.362, y0 + 0.003), (x0 - 0.113, y0), (x0 + 0.126, y0), (x0 + 0.368, y0 + 0.003)]
            sizes = [(0.153, 0.135), (0.17, 0.135), (0.17, 0.135), (0.16, 0.135)]
            return make_boxes(names, xys, sizes)
  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("expVersion", expVersion)

        cimgs = []
        cimg_names = []

        response = None
        has_responded = False
        RESPONSE_TIME = None

        slide_num = slideNum
        qn_num = qnNum

        if qn_num == "Q04a" and not previous_wrong:
            previous_wrong = False
            continueRoutine = False

        slide = make_slide(slide_num)
        slide.autoDraw = True

        cimgs = all_cimgs[slide_num]()
        radio0s = []
        radio1s = []
        if slide_num == "slide-02":
            radio0s = make_radios(make_radio0, cimgs[:3], radio0s)
            radio0s = make_radios(make_radio0, cimgs[3:], radio0s)
            radio1s = make_radios(make_radio1, cimgs[:3], radio1s)
            radio1s = make_radios(make_radio1, cimgs[3:], radio1s)
        else:
            radio0s = make_radios(make_radio0, cimgs, radio0s)
            radio1s = make_radios(make_radio1, cimgs, radio1s)
        for i in range(len(cimgs)):
            cimgs[i].autoDraw = True
            radio0s[i].autoDraw = True

        #REPLAY.autoDraw = True
        #NEXT.autoDraw = True
        #COVER.autoDraw = True
        #COVER.opacity = 0.9

        if USE_AUDIO:
            if qn_num == "Q01":
                aud_file = f"{AUD_DIR}/BEPS Instructions.m4a"
            else:
                aud_file = f"{AUD_DIR}/{taskName} {qn_num}.m4a"
            SOUND = make_sound("sound", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_START = 0
            SOUND.play()

        if SHOW_DEBUG:
            cimg_names = []
            for i in range(len(cimgs)):
                cimg_names.append(cimgs[i].name)
      Each Frame:
        if qn_num == "Q01" and SOUND_START == 0 and t - SOUND_DUR > 0:
            aud_file = f"{AUD_DIR}/{taskName} {qn_num}.m4a"
            SOUND = make_sound("sound", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_START = t
            SOUND.play()

        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            print(f"MOUSE_L_prev = {MOUSE_L_prev}; "
                  f"MOUSE_L = {MOUSE_L}")
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L:
        #        if has_responded and NEXT.contains(MOUSE):
        #            continueRoutine = False
        #        if REPLAY.contains(MOUSE):
        #            if t - SOUND_START < SOUND_DUR:
        #                # Will only work if the sound has not finished
        #                SOUND.stop()
        #            SOUND = make_sound("sound", aud_file)
        #            SOUND_START = t
        #            SOUND.play()
                for i in range(len(cimgs)):
                    if cimgs[i].contains(MOUSE) or radio0s[i].contains(MOUSE):
                        if not has_responded:
                            has_responded = True
        #                    COVER.autoDraw = False
        #                    COVER.opacity = 0
                        response = cimgs[i].name
                        for radio in radio1s:
                            radio.autoDraw = False
                            if response == radio.name:
                                radio.autoDraw = True
        #                continueRoutine = False
                        RESPONSE_TIME = t

        if RESPONSE_TIME is not None and t - RESPONSE_TIME > 0.5:
            continueRoutine = False

        if SHOW_DEBUG:
            trial_text.text = f"""
        taskName = {taskName}
        aud_file = {aud_file}
        slide_num = {slide_num}
        qn_num = {qn_num}
        cimg_names = {cimg_names}
        response = {response}
        corrAns = {corrAns}
        t = {round(t, 3)}
        """
      End Routine:
        if USE_AUDIO:
            SOUND.stop()

        for cimg in cimgs:
            cimg.size = (0, 0)
            cimg.autoDraw = False
        for radio in radio0s:
            radio.size = (0, 0)
            radio.autoDraw = False
        for radio in radio1s:
            radio.size = (0, 0)
            radio.autoDraw = False

        slide.size = (0, 0)
        slide.autoDraw = False

        # Record timestamp and total time
        if response is None:
            response = ""
        is_correct = 1 if str(response) == str(corrAns) else 0
        if response is "":
            is_correct = ""
        thisExp.addData("response", response)
        thisExp.addData("is_correct", is_correct)
        thisExp.addData("end_timestamp", util.MonotonicClock.getDateStr())
        thisExp.addData("total_seconds", globalClock.getTime())

        if qn_num == "Q04" and is_correct == 0:
            previous_wrong = True

        if SHOW_DEBUG:
            print(f"response = {response}")
            print(f"corrAns = {corrAns}")
            print(f"previous_wrong = {previous_wrong}")
    CodeComponent trial_anim
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        redbox_targets = []
        redbox_times = []
        redbox_target = None
        redbox_time = None
        red_box = None

        # Orders are reversed since we're using .pop()
        # Read the following right-to-left!
        ALL_REDBOX_TARGETS = {
        #    "39": ["heavy", "happy", "slow"],
        #    "40": ["big", "dark", "heavy"],
            "44": ["played", "playing"],
        #    "45": ["or", "and", "with"],
        #    "46": ["underneath", "below", "on", "under", "beside", "at", "above"],
        #    "48": ["cup", "duck", "apple", "vase"],
            "51": ["boy_is", "boys_are"],
            "52": ["smell", "smelly"],
            "53": ["book", "cup", "leaf"],
            "54": ["dice", "map", "rice"],
            "55": ["car", "house", "mat"],
        #    "56": ["sunshine", "shine", "sun"],
        #    "57": ["bow", "ox", "box"],
            "61": ["goose", "monkey"],
        #    "62": ["under", "untie", "undo"],
        #    "63": ["moonset", "moonlight", "moondown"],
            "64": ["resmall", "rethink", "reheart"],
        #    "65": ["sandless", "sandful", "sandy"],
        }

        ALL_REDBOX_TIMES = {
        #    "39": [5.2, 4.3, 3.7, 3.0],
        #    "40": [4.8, 4.0, 3.2, 2.5],
            "44": [10.8, 7.4, 4.1],
        #    "45": [13.0, 10.9, 8.0, 5.0],
        #    "46": [9.8, 8.8, 8.0, 7.2, 6.5, 5.8, 5.0, 4.2],
        #    "48": [7.7, 7.0, 6.3, 5.2, 4.3],
            "51": [7.2, 5.9, 4.0],
            "52": [7.5, 5.6, 3.9],
            "53": [6.4, 5.4, 4.4, 3.4],
            "54": [6.6, 5.6, 4.6, 3.6],
            "55": [6.5, 5.0, 4.5, 3.5],
        #    "56": [8.6, 7.6, 6.6, 5.6],
        #    "57": [6.3, 5.5, 4.7, 3.8],
            "61": [5.8, 5.1, 4.0],
        #    "62": [11.0, 10.3, 9.5, 8.5],
        #    "63": [9.8, 8.8, 7.8, 6.8],
            "64": [8.8, 7.7, 6.8, 5.8],
        #    "65": [8.1, 7.2, 6.3, 5.3],
        }
      Begin Routine:
        if USE_AUDIO:
            if slide_num in ALL_REDBOX_TARGETS:
                redbox_targets = ALL_REDBOX_TARGETS[slide_num]
                redbox_times = ALL_REDBOX_TIMES[slide_num]
                redbox_target = redbox_targets.pop()
                redbox_time = redbox_times.pop()

            if slide_num in [
                "44", "45", "46", "48",
                "51", "52", "56", "57",
                "62", "63", "64", "65"
            ]:
                red_box = make_box("red_box", (0, 0), (0, 0), 1, "-1to5")
            else:
                red_box = make_box("red_box", (0, 0), (0, 0), 1)
      Each Frame:
        if USE_AUDIO:
            if len(redbox_targets) > 0:
                if t >= redbox_time:
                    for cimg in cimgs:
                        if cimg.name == redbox_target:
                            red_box.pos = cimg.pos
                            unhide(red_box, cimg.size)
                            break
                    redbox_target = redbox_targets.pop()
                    redbox_time = redbox_times.pop()
            elif len(redbox_times) > 0:
                if t >= redbox_time:
                    for cimg in cimgs:
                        if cimg.name == redbox_target:
                            red_box.pos = cimg.pos
                            unhide(red_box, cimg.size)
                            break
                    redbox_time = redbox_times.pop()
            else:
                if redbox_time is not None and t >= redbox_time:
                    hide(red_box)
    TextComponent trial_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:
    conditionsFile = $SEQ_FILE
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
